# Generated by Configurator on Fri May 22 22:41:57 CST 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,TIScope,NikonTI,TIScope
Device,Andor sCMOS Camera,AndorSDK3,Andor sCMOS Camera
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,LudlController,Ludl,LudlController
Device,LudlWheel,Ludl,LudlWheel

# Pre-init settings for devices
Property,LudlController,Port,COM5
Property,LudlWheel,Fiter Positions,6
Property,LudlWheel,Home-Timeout-(s),10.0000
Property,LudlWheel,LudlDeviceNumberWheel,1
Property,LudlWheel,LudlWheelNumber,1

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,2000.0000
Property,COM5,BaudRate,9600
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,11.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,2
Property,COM5,Verbose,1

# Hub (parent) references
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,1
FocusDirection,TIPFSOffset,1

# Roles
Property,Core,Camera,Andor sCMOS Camera
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-S Fluor 40x NA 0.90 Dry
Label,TINosePiece,4,5-Plan Fluor 100x NA 1.30 Oil
Label,TINosePiece,3,4-Plan Fluor 40x NA 1.30 Oil
Label,TINosePiece,2,3-Plan Apo 20x NA 0.75 Dry
Label,TINosePiece,1,2-Plan Apo 10x NA 0.45 Dry
Label,TINosePiece,0,1-Plan Apo 4x NA 0.20 Dry
# TIFilterBlock1
Label,TIFilterBlock1,5,6-S-Qad
Label,TIFilterBlock1,4,5-Conti
Label,TIFilterBlock1,3,4------
Label,TIFilterBlock1,2,3------
Label,TIFilterBlock1,1,2-DIA
Label,TIFilterBlock1,0,1------
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100
# LudlWheel
Label,LudlWheel,5,Filter-6
Label,LudlWheel,4,Filter-5
Label,LudlWheel,3,Filter-4
Label,LudlWheel,2,Filter-3
Label,LudlWheel,1,Filter-2
Label,LudlWheel,0,Filter-1

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

