# Generated by Configurator on Fri Feb 24 17:35:58 CST 2023

# Reset
Property,Core,Initialize,0

# Devices
Device,Ti2-E__0,NikonTi2,Ti2-E__0
Device,ZDrive,NikonTi2,ZDrive
Device,XYStage,NikonTi2,XYStage
Device,Nosepiece,NikonTi2,Nosepiece
Device,CondenserTurret,NikonTi2,CondenserTurret
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,PFSOffset,NikonTi2,PFSOffset
Device,IntermediateMagnification,NikonTi2,IntermediateMagnification
Device,DiaLamp,NikonTi2,DiaLamp
Device,Camera-1,PVCAM,Camera-1

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references
Parent,ZDrive,Ti2-E__0
Parent,XYStage,Ti2-E__0
Parent,Nosepiece,Ti2-E__0
Parent,CondenserTurret,Ti2-E__0
Parent,FilterTurret1,Ti2-E__0
Parent,Turret1Shutter,Ti2-E__0
Parent,LightPath,Ti2-E__0
Parent,PFS,Ti2-E__0
Parent,PFSOffset,Ti2-E__0
Parent,IntermediateMagnification,Ti2-E__0
Parent,DiaLamp,Ti2-E__0

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,0
FocusDirection,PFSOffset,0

# Roles
Property,Core,Camera,Camera-1
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# Nosepiece
Label,Nosepiece,5,6-
Label,Nosepiece,4,5-
Label,Nosepiece,3,4-Plan Apo 40x
Label,Nosepiece,2,3-Plan Apo 40x
Label,Nosepiece,1,2-Plan Apo 20x
Label,Nosepiece,0,1-Plan Apo LmbdS4.00DIC 10x
# CondenserTurret
Label,CondenserTurret,6,7-
Label,CondenserTurret,5,6-
Label,CondenserTurret,4,5-
Label,CondenserTurret,3,4-
Label,CondenserTurret,2,3-
Label,CondenserTurret,1,2-
Label,CondenserTurret,0,1-
# FilterTurret1
Label,FilterTurret1,5,6-Empty
Label,FilterTurret1,4,5-Empty
Label,FilterTurret1,3,4-Texas Red
Label,FilterTurret1,2,3-FITC
Label,FilterTurret1,1,2-DAPI
Label,FilterTurret1,0,1-Empty
# LightPath
Label,LightPath,3,4-L100
Label,LightPath,2,3-AUX
Label,LightPath,1,2-R100
Label,LightPath,0,1-EYE

# Configuration presets

# PixelSize settings
# Resolution preset: 4X_Kinetic
ConfigPixelSize,4X_Kinetic,LightPath,Label,2-R100
ConfigPixelSize,4X_Kinetic,Camera-1,Description,PVCAM API device adapter
PixelSize_um,4X_Kinetic,1.625
PixelSizeAffine,4X_Kinetic,1.625,0.0,0.0,0.0,1.625,0.0

