# Generated by Configurator on Wed May 08 16:59:58 CST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,Ti2-E__0,NikonTi2,Ti2-E__0
Device,ZDrive,NikonTi2,ZDrive
Device,XYStage,NikonTi2,XYStage
Device,Nosepiece,NikonTi2,Nosepiece
Device,CondenserTurret,NikonTi2,CondenserTurret
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,PFSOffset,NikonTi2,PFSOffset
Device,IntermediateMagnification,NikonTi2,IntermediateMagnification
Device,DiaLamp,NikonTi2,DiaLamp
Device,Camera-1,PVCAM,Camera-1

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references
Parent,ZDrive,Ti2-E__0
Parent,XYStage,Ti2-E__0
Parent,Nosepiece,Ti2-E__0
Parent,CondenserTurret,Ti2-E__0
Parent,FilterTurret1,Ti2-E__0
Parent,Turret1Shutter,Ti2-E__0
Parent,LightPath,Ti2-E__0
Parent,PFS,Ti2-E__0
Parent,PFSOffset,Ti2-E__0
Parent,IntermediateMagnification,Ti2-E__0
Parent,DiaLamp,Ti2-E__0

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,0
FocusDirection,PFSOffset,0

# Roles
Property,Core,Camera,Camera-1
Property,Core,Focus,ZDrive
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# Nosepiece
Label,Nosepiece,5,6-
Label,Nosepiece,4,5-
Label,Nosepiece,3,4-Plan Apo 40x
Label,Nosepiece,2,3-Plan Apo 40x
Label,Nosepiece,1,2-Plan Apo 20x
Label,Nosepiece,0,1-Plan Apo LmbdS4.00DIC 10x
# CondenserTurret
Label,CondenserTurret,6,7-
Label,CondenserTurret,5,6-
Label,CondenserTurret,4,5-
Label,CondenserTurret,3,4-
Label,CondenserTurret,2,3-
Label,CondenserTurret,1,2-
Label,CondenserTurret,0,1-
# FilterTurret1
Label,FilterTurret1,5,6-Empty
Label,FilterTurret1,4,5-89000
Label,FilterTurret1,3,4-Texas Red
Label,FilterTurret1,2,3-FITC
Label,FilterTurret1,1,2-DAPI
Label,FilterTurret1,0,1-Empty
# LightPath
Label,LightPath,3,4-L100
Label,LightPath,2,3-AUX
Label,LightPath,1,2-R100
Label,LightPath,0,1-EYE

# Configuration presets
# Group: Kinetix-left
# Preset: multipass-89000
ConfigGroup,Kinetix-left,multipass-89000,LightPath,Label,4-L100
ConfigGroup,Kinetix-left,multipass-89000,FilterTurret1,Label,5-89000
ConfigGroup,Kinetix-left,multipass-89000,Camera-1,Port,Dynamic Range
ConfigGroup,Kinetix-left,multipass-89000,Camera-1,SMARTStreamingEnabled,No
ConfigGroup,Kinetix-left,multipass-89000,Camera-1,Trigger-Expose Out-Mux,1
ConfigGroup,Kinetix-left,multipass-89000,Camera-1,TriggerMode,Internal Trigger

# Preset: FITC
ConfigGroup,Kinetix-left,FITC,LightPath,Label,4-L100
ConfigGroup,Kinetix-left,FITC,FilterTurret1,Label,3-FITC
ConfigGroup,Kinetix-left,FITC,Camera-1,Port,Dynamic Range
ConfigGroup,Kinetix-left,FITC,Camera-1,SMARTStreamingEnabled,No
ConfigGroup,Kinetix-left,FITC,Camera-1,Trigger-Expose Out-Mux,1
ConfigGroup,Kinetix-left,FITC,Camera-1,TriggerMode,Internal Trigger

# Preset: DAPI
ConfigGroup,Kinetix-left,DAPI,LightPath,Label,4-L100
ConfigGroup,Kinetix-left,DAPI,FilterTurret1,Label,2-DAPI
ConfigGroup,Kinetix-left,DAPI,Camera-1,Port,Dynamic Range
ConfigGroup,Kinetix-left,DAPI,Camera-1,SMARTStreamingEnabled,No
ConfigGroup,Kinetix-left,DAPI,Camera-1,Trigger-Expose Out-Mux,1
ConfigGroup,Kinetix-left,DAPI,Camera-1,TriggerMode,Internal Trigger

# Preset: ex-trigger
ConfigGroup,Kinetix-left,ex-trigger,FilterTurret1,Label,5-89000
ConfigGroup,Kinetix-left,ex-trigger,LightPath,Label,4-L100
ConfigGroup,Kinetix-left,ex-trigger,Camera-1,Port,Dynamic Range
ConfigGroup,Kinetix-left,ex-trigger,Camera-1,SMARTStreamingEnabled,No
ConfigGroup,Kinetix-left,ex-trigger,Camera-1,Trigger-Expose Out-Mux,2
ConfigGroup,Kinetix-left,ex-trigger,Camera-1,TriggerMode,Edge Trigger

# Preset: Texas Red
ConfigGroup,Kinetix-left,Texas Red,LightPath,Label,4-L100
ConfigGroup,Kinetix-left,Texas Red,FilterTurret1,Label,4-Texas Red
ConfigGroup,Kinetix-left,Texas Red,Camera-1,Port,Dynamic Range
ConfigGroup,Kinetix-left,Texas Red,Camera-1,SMARTStreamingEnabled,No
ConfigGroup,Kinetix-left,Texas Red,Camera-1,Trigger-Expose Out-Mux,1
ConfigGroup,Kinetix-left,Texas Red,Camera-1,TriggerMode,Internal Trigger



# PixelSize settings
# Resolution preset: 40X_kinetix
ConfigPixelSize,40X_kinetix,XYStage,TransposeMirrorX,0
ConfigPixelSize,40X_kinetix,XYStage,TransposeMirrorY,0
ConfigPixelSize,40X_kinetix,Nosepiece,Label,3-Plan Apo 40x
ConfigPixelSize,40X_kinetix,Camera-1,ChipName,TMP-Kinetix
ConfigPixelSize,40X_kinetix,Camera-1,TransposeCorrection,0
ConfigPixelSize,40X_kinetix,Camera-1,TransposeMirrorX,0
ConfigPixelSize,40X_kinetix,Camera-1,TransposeMirrorY,0
ConfigPixelSize,40X_kinetix,Camera-1,TransposeXY,0
PixelSize_um,40X_kinetix,0.1606
PixelSizeAffine,40X_kinetix,-0.1606805835343957,-4.265258943231641E-4,0.0,1.6447927643449967E-5,0.16051703747782972,0.0
# Resolution preset: 10_kinetix_measured
ConfigPixelSize,10_kinetix_measured,XYStage,TransposeMirrorX,0
ConfigPixelSize,10_kinetix_measured,XYStage,TransposeMirrorY,0
ConfigPixelSize,10_kinetix_measured,Nosepiece,Label,1-Plan Apo LmbdS4.00DIC 10x
ConfigPixelSize,10_kinetix_measured,Camera-1,ChipName,TMP-Kinetix
ConfigPixelSize,10_kinetix_measured,Camera-1,TransposeCorrection,0
ConfigPixelSize,10_kinetix_measured,Camera-1,TransposeMirrorX,0
ConfigPixelSize,10_kinetix_measured,Camera-1,TransposeMirrorY,0
ConfigPixelSize,10_kinetix_measured,Camera-1,TransposeXY,0
PixelSize_um,10_kinetix_measured,0.6439
PixelSizeAffine,10_kinetix_measured,-0.6441953385558242,-4.5368433916700507E-4,0.0,5.067213479323705E-5,0.6435726559809668,0.0
# Resolution preset: 20x_kinitix_measured
ConfigPixelSize,20x_kinitix_measured,XYStage,TransposeMirrorX,0
ConfigPixelSize,20x_kinitix_measured,XYStage,TransposeMirrorY,0
ConfigPixelSize,20x_kinitix_measured,Nosepiece,Label,2-Plan Apo 20x
ConfigPixelSize,20x_kinitix_measured,Camera-1,ChipName,TMP-Kinetix
ConfigPixelSize,20x_kinitix_measured,Camera-1,TransposeCorrection,0
ConfigPixelSize,20x_kinitix_measured,Camera-1,TransposeMirrorX,0
ConfigPixelSize,20x_kinitix_measured,Camera-1,TransposeMirrorY,0
ConfigPixelSize,20x_kinitix_measured,Camera-1,TransposeXY,0
PixelSize_um,20x_kinitix_measured,0.3241
PixelSizeAffine,20x_kinitix_measured,-0.3242832498014263,-4.530497793640928E-4,0.0,8.697760134714804E-5,0.3238202198623546,0.0
# Resolution preset: 4x_kinetix_meausred
ConfigPixelSize,4x_kinetix_meausred,XYStage,TransposeMirrorX,0
ConfigPixelSize,4x_kinetix_meausred,XYStage,TransposeMirrorY,0
ConfigPixelSize,4x_kinetix_meausred,Nosepiece,Label,6-
ConfigPixelSize,4x_kinetix_meausred,Camera-1,ChipName,TMP-Kinetix
ConfigPixelSize,4x_kinetix_meausred,Camera-1,TransposeCorrection,0
ConfigPixelSize,4x_kinetix_meausred,Camera-1,TransposeMirrorX,0
ConfigPixelSize,4x_kinetix_meausred,Camera-1,TransposeMirrorY,0
ConfigPixelSize,4x_kinetix_meausred,Camera-1,TransposeXY,0
PixelSize_um,4x_kinetix_meausred,1.6261
PixelSizeAffine,4x_kinetix_meausred,-1.6262239438433548,-4.6487535207870675E-4,0.0,1.320038124185251E-4,1.6259365306807518,0.0

