# Generated by Configurator on Mon May 06 11:06:59 CST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,COM4,SerialManager,COM4
Device,Ti2-E__0,NikonTi2,Ti2-E__0
Device,ZDrive,NikonTi2,ZDrive
Device,Nosepiece,NikonTi2,Nosepiece
Device,CondenserTurret,NikonTi2,CondenserTurret
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,PFSOffset,NikonTi2,PFSOffset
Device,IntermediateMagnification,NikonTi2,IntermediateMagnification
Device,DiaLamp,NikonTi2,DiaLamp
Device,Camera-1,PVCAM,Camera-1
Device,XYStage,Prior,XYStage

# Pre-init settings for devices
Property,XYStage,Port,COM4

# Pre-init settings for COM ports
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references
Parent,ZDrive,Ti2-E__0
Parent,Nosepiece,Ti2-E__0
Parent,CondenserTurret,Ti2-E__0
Parent,FilterTurret1,Ti2-E__0
Parent,Turret1Shutter,Ti2-E__0
Parent,LightPath,Ti2-E__0
Parent,PFS,Ti2-E__0
Parent,PFSOffset,Ti2-E__0
Parent,IntermediateMagnification,Ti2-E__0
Parent,DiaLamp,Ti2-E__0

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,1
FocusDirection,PFSOffset,1

# Roles
Property,Core,Camera,Camera-1
Property,Core,Focus,ZDrive
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# Nosepiece
Label,Nosepiece,5,6-
Label,Nosepiece,4,5-
Label,Nosepiece,3,4-Plan Apo 40x
Label,Nosepiece,2,3-Plan Apo 40x
Label,Nosepiece,1,2-Plan Apo 20x
Label,Nosepiece,0,1-Plan Apo LmbdS4.00DIC 10x
# CondenserTurret
Label,CondenserTurret,6,7-
Label,CondenserTurret,5,6-
Label,CondenserTurret,4,5-
Label,CondenserTurret,3,4-
Label,CondenserTurret,2,3-
Label,CondenserTurret,1,2-
Label,CondenserTurret,0,1-
# FilterTurret1
Label,FilterTurret1,5,6-Empty
Label,FilterTurret1,4,5-89000
Label,FilterTurret1,3,4-Texas Red
Label,FilterTurret1,2,3-FITC
Label,FilterTurret1,1,2-DAPI
Label,FilterTurret1,0,1-Empty
# LightPath
Label,LightPath,3,4-L100
Label,LightPath,2,3-AUX
Label,LightPath,1,2-R100
Label,LightPath,0,1-EYE

# Configuration presets
# Group: Kinetix-left
# Preset: multipass-89000
ConfigGroup,Kinetix-left,multipass-89000,LightPath,Label,4-L100
ConfigGroup,Kinetix-left,multipass-89000,FilterTurret1,Label,5-89000
ConfigGroup,Kinetix-left,multipass-89000,Camera-1,Port,Dynamic Range
ConfigGroup,Kinetix-left,multipass-89000,Camera-1,SMARTStreamingEnabled,No
ConfigGroup,Kinetix-left,multipass-89000,Camera-1,Trigger-Expose Out-Mux,1
ConfigGroup,Kinetix-left,multipass-89000,Camera-1,TriggerMode,Internal Trigger

# Preset: FITC
ConfigGroup,Kinetix-left,FITC,LightPath,Label,4-L100
ConfigGroup,Kinetix-left,FITC,FilterTurret1,Label,3-FITC
ConfigGroup,Kinetix-left,FITC,Camera-1,Port,Dynamic Range
ConfigGroup,Kinetix-left,FITC,Camera-1,SMARTStreamingEnabled,No
ConfigGroup,Kinetix-left,FITC,Camera-1,Trigger-Expose Out-Mux,1
ConfigGroup,Kinetix-left,FITC,Camera-1,TriggerMode,Internal Trigger

# Preset: DAPI
ConfigGroup,Kinetix-left,DAPI,LightPath,Label,4-L100
ConfigGroup,Kinetix-left,DAPI,FilterTurret1,Label,2-DAPI
ConfigGroup,Kinetix-left,DAPI,Camera-1,Port,Dynamic Range
ConfigGroup,Kinetix-left,DAPI,Camera-1,SMARTStreamingEnabled,No
ConfigGroup,Kinetix-left,DAPI,Camera-1,Trigger-Expose Out-Mux,1
ConfigGroup,Kinetix-left,DAPI,Camera-1,TriggerMode,Internal Trigger

# Preset: ex-trigger
ConfigGroup,Kinetix-left,ex-trigger,FilterTurret1,Label,5-89000
ConfigGroup,Kinetix-left,ex-trigger,LightPath,Label,4-L100
ConfigGroup,Kinetix-left,ex-trigger,Camera-1,Port,Dynamic Range
ConfigGroup,Kinetix-left,ex-trigger,Camera-1,SMARTStreamingEnabled,No
ConfigGroup,Kinetix-left,ex-trigger,Camera-1,Trigger-Expose Out-Mux,2
ConfigGroup,Kinetix-left,ex-trigger,Camera-1,TriggerMode,Edge Trigger

# Preset: Texas Red
ConfigGroup,Kinetix-left,Texas Red,LightPath,Label,4-L100
ConfigGroup,Kinetix-left,Texas Red,FilterTurret1,Label,4-Texas Red
ConfigGroup,Kinetix-left,Texas Red,Camera-1,Port,Dynamic Range
ConfigGroup,Kinetix-left,Texas Red,Camera-1,SMARTStreamingEnabled,No
ConfigGroup,Kinetix-left,Texas Red,Camera-1,Trigger-Expose Out-Mux,1
ConfigGroup,Kinetix-left,Texas Red,Camera-1,TriggerMode,Internal Trigger


# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings
# Resolution preset: 4X_Kinetic
ConfigPixelSize,4X_Kinetic,LightPath,Label,2-R100
ConfigPixelSize,4X_Kinetic,Camera-1,Description,PVCAM API device adapter
PixelSize_um,4X_Kinetic,1.625
PixelSizeAffine,4X_Kinetic,1.625,0.0,0.0,0.0,1.625,0.0
# Resolution preset: 10x_Kinitix
ConfigPixelSize,10x_Kinitix,LightPath,Label,4-L100
ConfigPixelSize,10x_Kinitix,Camera-1,Description,PVCAM API device adapter
PixelSize_um,10x_Kinitix,0.65
PixelSizeAffine,10x_Kinitix,0.65,0.0,0.0,0.0,0.65,0.0

