# Generated by Configurator on Fri Jan 15 16:08:04 CST 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM1,SerialManager,COM1
Device,COM7,SerialManager,COM7
Device,COM3,SerialManager,COM3
Device,AndorLaserCombiner,AndorLaserCombiner,AndorLaserCombiner
Device,PiezoStage,AndorLaserCombiner,PiezoStage
Device,TIScope,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,XYStage,Prior,XYStage
Device,CSUX-Hub,CSUX,CSUX-Hub
Device,CSUX-Dichroic Mirror,CSUX,CSUX-Dichroic Mirror
Device,CSUX-Shutter,CSUX,CSUX-Shutter
Device,CSUX-DriveSpeed,CSUX,CSUX-DriveSpeed
Device,Wheel-A,SutterLambda,Wheel-A
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,TIDiaLamp,NikonTI,TIDiaLamp

# Pre-init settings for devices
Property,AndorLaserCombiner,MultiPortUnitPresent,1
Property,XYStage,Port,COM7
Property,CSUX-Hub,Port,COM3
Property,Wheel-A,Port,COM5
Property,Wheel-A,Timeout(ms),500

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,9600
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Fast USB to Serial,Disable
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,115200
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1

# Hub (parent) references
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope
Parent,TIDiaLamp,TIScope

# Initialize
Property,Core,Initialize,1
Property,AndorLaserCombiner,DOUT,0xfc
Property,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE
Property,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
Property,HamamatsuHam_DCAM,ScanMode,1
# external trigger
Property,HamamatsuHam_DCAM,TriggerPolarity,POSITIVE
Property,HamamatsuHam_DCAM,ScanMode,1
Property,AndorLaserCombiner,LaserPort,A
Property,PiezoStage,PiezoRange,200
Property,Wheel-A,Label,Filter-6
Property,CSUX-Shutter,State,Open
#Property,CSUX-Dichroic,State,0

# Delays

# Focus directions
FocusDirection,PiezoStage,-1
FocusDirection,TIZDrive,0
FocusDirection,TIPFSOffset,0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,AndorLaserCombiner
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Apo TIRF 100x NA 1.49 Oil
Label,TINosePiece,4,5-Apo TIRF 60x NA 1.49 Oil
Label,TINosePiece,3,4-Plan Apo 60x NA 1.40 Oil
Label,TINosePiece,2,3-S Fluor 40x NA 1.30 Oil
Label,TINosePiece,1,2-Plan Apo 20x NA 0.75 Dry
Label,TINosePiece,0,1-Apo TIRF 60x NA 1.49 Oil
# TIFilterBlock1
Label,TIFilterBlock1,5,6------
Label,TIFilterBlock1,4,5------
Label,TIFilterBlock1,3,4-ANALY
Label,TIFilterBlock1,2,3-TRITC
Label,TIFilterBlock1,1,2-FITC
Label,TIFilterBlock1,0,1-DAPI
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100
# CSUX-Dichroic Mirror
Label,CSUX-Dichroic Mirror,2,Dichroic-3
Label,CSUX-Dichroic Mirror,1,Dichroic-2
Label,CSUX-Dichroic Mirror,0,Dichroic-1
# Wheel-A
Label,Wheel-A,9,Filter-9
Label,Wheel-A,8,Filter-8
Label,Wheel-A,7,Filter-7
Label,Wheel-A,6,Filter-6
Label,Wheel-A,5,Filter-5
Label,Wheel-A,4,Filter-4
Label,Wheel-A,3,Filter-3
Label,Wheel-A,2,Filter-2
Label,Wheel-A,1,Filter-1
Label,Wheel-A,0,Filter-0

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

